# Generated by Configurator on Mon May 11 11:45:17 BST 2015

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,Evolve-512,PVCAM,Camera-1
Device,objectives,DemoCamera,DHub
Device,DObjective,DemoCamera,DObjective
Device,SC10,ThorlabsSC10,SC10

# Pre-init settings for devices
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,SC10,Port,COM1

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DObjective,objectives

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Evolve-512
Property,Core,Shutter,SC10
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DObjective
Label,DObjective,5,Objective-F
Label,DObjective,4,Objective-E
Label,DObjective,3,Objective-D
Label,DObjective,2,Objective-C
Label,DObjective,1,Objective-B
Label,DObjective,0,Objective-A

# Configuration presets
# Group: Frame transfer
# Preset: Alternate Normal Parallel Clocking
ConfigGroup,Frame transfer,Alternate Normal Parallel Clocking,Evolve-512,PMode,Alternate Normal Parallel Clocking

# Preset: Alternate Frame Transfer Parallel Clocking
ConfigGroup,Frame transfer,Alternate Frame Transfer Parallel Clocking,Evolve-512,PMode,Alternate Frame Transfer Parallel Clocking

# Preset: Frame Transfer Parallel Clocking
ConfigGroup,Frame transfer,Frame Transfer Parallel Clocking,Evolve-512,PMode,Frame Transfer Parallel Clocking

# Preset: Normal Parallel Clocking
ConfigGroup,Frame transfer,Normal Parallel Clocking,Evolve-512,PMode,Normal Parallel Clocking


# Group: Temperature
# Preset: CCD Temperature
ConfigGroup,Temperature,CCD Temperature,Evolve-512,CCDTemperature,-79.9900


# Group: Acquisition Method
# Preset: Polling
ConfigGroup,Acquisition Method,Polling,Evolve-512,AcquisitionMethod,Polling

# Preset: Callbacks
ConfigGroup,Acquisition Method,Callbacks,Evolve-512,AcquisitionMethod,Callbacks


# Group: Triggers
# Preset: Bulb
ConfigGroup,Triggers,Bulb,Evolve-512,TriggerMode,Bulb

# Preset: Variable Timed
ConfigGroup,Triggers,Variable Timed,Evolve-512,TriggerMode,Variable Timed

# Preset: Strobed
ConfigGroup,Triggers,Strobed,Evolve-512,TriggerMode,Strobed

# Preset: Trigger first
ConfigGroup,Triggers,Trigger first,Evolve-512,TriggerMode,Trigger first

# Preset: Timed
ConfigGroup,Triggers,Timed,Evolve-512,TriggerMode,Timed

# Preset: Flash
ConfigGroup,Triggers,Flash,Evolve-512,TriggerMode,Flash


# Group: EM Gain
# Preset: NewPreset
ConfigGroup,EM Gain,NewPreset,Evolve-512,MultiplierGain,1


# Group: *** Default ***
# Preset: Default
ConfigGroup,*** Default ***,Default,Evolve-512,CCDTemperatureSetPoint,-80.0000
ConfigGroup,*** Default ***,Default,Evolve-512,ClearMode,Clear Pre-Sequence
ConfigGroup,*** Default ***,Default,Evolve-512,Gain,2
ConfigGroup,*** Default ***,Default,Evolve-512,ShutterMode,Open Shutter Pre-Sequence
ConfigGroup,*** Default ***,Default,Evolve-512,Exposure,4.4000
ConfigGroup,*** Default ***,Default,Evolve-512,Trigger Timeout (secs),20
ConfigGroup,*** Default ***,Default,Core,AutoShutter,1


# Group: Actual interval
# Preset: NewPreset
ConfigGroup,Actual interval,NewPreset,Evolve-512,ActualInterval-ms,25.6800


# Group: Shutter Mode
# Preset: Open Shutter Pre-Trigger
ConfigGroup,Shutter Mode,Open Shutter Pre-Trigger,Evolve-512,ShutterMode,Open Shutter Pre-Trigger

# Preset: Open Shutter Pre-Exposure
ConfigGroup,Shutter Mode,Open Shutter Pre-Exposure,Evolve-512,ShutterMode,Open Shutter Pre-Exposure

# Preset: Never Open Shutter
ConfigGroup,Shutter Mode,Never Open Shutter,Evolve-512,ShutterMode,Never Open Shutter

# Preset: Open Shutter Pre-Sequence
ConfigGroup,Shutter Mode,Open Shutter Pre-Sequence,Evolve-512,ShutterMode,Open Shutter Pre-Sequence

# Preset: Do Not Change Shutter State
ConfigGroup,Shutter Mode,Do Not Change Shutter State,Evolve-512,ShutterMode,Do Not Change Shutter State


# Group: Readout Port
# Preset: 10MHz 16bit
ConfigGroup,Readout Port,10MHz 16bit,Evolve-512,ReadoutRate,10MHz 16bit

# Preset: 20MHz 16bit
ConfigGroup,Readout Port,20MHz 16bit,Evolve-512,ReadoutRate,20MHz 16bit


# Group: Set Temperature
# Preset: Standard -80
ConfigGroup,Set Temperature,Standard -80,Evolve-512,CCDTemperatureSetPoint,-80.0000


# Group: Gain mode
# Preset: 2
ConfigGroup,Gain mode,2,Evolve-512,Gain,2

# Preset: 1
ConfigGroup,Gain mode,1,Evolve-512,Gain,1


# Group: Image Interval
# Preset: NewPreset
ConfigGroup,Image Interval,NewPreset,Evolve-512,ActualInterval-ms,4.6300


# Group: Circular Buffer
# Preset: NewPreset
ConfigGroup,Circular Buffer,NewPreset,Evolve-512,CircularBufferFrameCount,8


# Group: Binning
# Preset: 2x2
ConfigGroup,Binning,2x2,Evolve-512,Binning,2
ConfigGroup,Binning,2x2,Evolve-512,BinningX,2
ConfigGroup,Binning,2x2,Evolve-512,BinningY,2

# Preset: 4x4
ConfigGroup,Binning,4x4,Evolve-512,Binning,4
ConfigGroup,Binning,4x4,Evolve-512,BinningX,4
ConfigGroup,Binning,4x4,Evolve-512,BinningY,4

# Preset: 8x8
ConfigGroup,Binning,8x8,Evolve-512,Binning,8
ConfigGroup,Binning,8x8,Evolve-512,BinningX,8
ConfigGroup,Binning,8x8,Evolve-512,BinningY,8

# Preset: 1x1
ConfigGroup,Binning,1x1,Evolve-512,Binning,1
ConfigGroup,Binning,1x1,Evolve-512,BinningX,1
ConfigGroup,Binning,1x1,Evolve-512,BinningY,1


# Group: Laser shutter
# Preset: NewPreset
ConfigGroup,Laser shutter,NewPreset,SC10,SC10 Command:,


# Group: Trigger timeout
# Preset: NewPreset
ConfigGroup,Trigger timeout,NewPreset,Evolve-512,Trigger Timeout (secs),20


# Group: Acq Mode
# Preset: Brightfield
ConfigGroup,Acq Mode,Brightfield,Evolve-512,Exposure,4.4000
ConfigGroup,Acq Mode,Brightfield,Evolve-512,MultiplierGain,1
ConfigGroup,Acq Mode,Brightfield,Core,Shutter,
ConfigGroup,Acq Mode,Brightfield,Core,AutoShutter,0

# Preset: Fluorescence
ConfigGroup,Acq Mode,Fluorescence,Evolve-512,Exposure,4.4000
ConfigGroup,Acq Mode,Fluorescence,Evolve-512,MultiplierGain,300
ConfigGroup,Acq Mode,Fluorescence,Core,Shutter,SC10
ConfigGroup,Acq Mode,Fluorescence,Core,AutoShutter,1


# Group: Clearing
# Preset: Clear Pre-Sequence
ConfigGroup,Clearing,Clear Pre-Sequence,Evolve-512,ClearMode,Clear Pre-Sequence

# Preset: Clear Never
ConfigGroup,Clearing,Clear Never,Evolve-512,ClearMode,Clear Never

# Preset: Clear Pre-Exposure and Post-Sequence
ConfigGroup,Clearing,Clear Pre-Exposure and Post-Sequence,Evolve-512,ClearMode,Clear Pre-Exposure and Post-Sequence

# Preset: Clear Post-Sequence
ConfigGroup,Clearing,Clear Post-Sequence,Evolve-512,ClearMode,Clear Post-Sequence

# Preset: Clear Pre- and Post-Sequence
ConfigGroup,Clearing,Clear Pre- and Post-Sequence,Evolve-512,ClearMode,Clear Pre- and Post-Sequence

# Preset: Clear Pre-Exposure
ConfigGroup,Clearing,Clear Pre-Exposure,Evolve-512,ClearMode,Clear Pre-Exposure



# PixelSize settings

